PsychoPy2experiment version="2020.1.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = face_cat
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Routines
  Routine trial
    ImageComponent cur_face
      image [set every repeat] = $face
      size = (0.5, 0.5)
      startVal [time (s)] = .5
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    KeyboardComponent key_resp
      allowedKeys = 'q', 'p'
      forceEndRoutine = True
      startVal [time (s)] = .5
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  Routine instr
    TextComponent instruct
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to our task. You will see a series of faces.
        When you see a face, press 'q' if you think the person is over 45.
        If you think the person if under 45, press 'p'.
        If you are unsure, take your best guess.

        Press space to start.
    KeyboardComponent key_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
      store = nothing
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  Routine thanku
    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 2.0
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      text:
        Thank you for participating.
        Press space to finish.
    KeyboardComponent key_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      store = nothing
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Flow
  Routine instr
  LoopInitiator face_trials loopType="TrialHandler"
    conditionsFile = face10_names.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ix', 0), ('face', 'stim/022668.png')]),
      OrderedDict([('ix', 1), ('face', 'stim/022126.png')]),
      OrderedDict([('ix', 2), ('face', 'stim/022898.png')]),
      OrderedDict([('ix', 3), ('face', 'stim/022318.png')]),
      OrderedDict([('ix', 4), ('face', 'stim/022442.png')]),
      OrderedDict([('ix', 5), ('face', 'stim/022324.png')]),
      OrderedDict([('ix', 6), ('face', 'stim/022495.png')]),
      OrderedDict([('ix', 7), ('face', 'stim/022085.png')]),
      OrderedDict([('ix', 8), ('face', 'stim/022721.png')]),
      OrderedDict([('ix', 9), ('face', 'stim/022047.png')])]
    Routine trial
  LoopTerminator face_trials
  Routine thanku
